PsychoPy2experiment version="3.0.0b9"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  expName = psychopy 期末
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Routines
  Routine number
    TextComponent number_right
      letterHeight = 0.3
      pos = (0.5, 0)
      startVal [time (s)] = 0
      text [set every repeat] = $right
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    TextComponent number_left
      letterHeight = 0.3
      pos = (-0.5, 0)
      startVal [time (s)] = 0
      text [set every repeat] = $left
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    KeyboardComponent key_resp_3
      allowedKeys = 'z','left','n','right'
      correctAns = right
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine hello
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = hello
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Choose the larger number of two numbers.
        Please "space" to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice
  Routine practice_2
    TextComponent practice_left
      letterHeight = 0.3
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $left
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    TextComponent practice_right
      letterHeight = 0.3
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $right
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    KeyboardComponent key_resp_5
      allowedKeys = 'z','left','n','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start
    TextComponent text_3
      letterHeight = 0.3
      startVal [time (s)] = 0.0
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      text:
        Are you ready?
        It's time to start.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block
    TextComponent text_4
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = take a break
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  Routine over
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = thank you for testing
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  Routine number2
    TextComponent number2_left
      letterHeight = 0.3
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      text = $left
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    TextComponent number2_right
      letterHeight = 0.3
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      text = $right
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    KeyboardComponent key_resp_7
      allowedKeys = 'z','left','n','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine hello
  Routine instruction
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('left', 1), ('right', 9)]),
      OrderedDict([('left', 4), ('right', 2)]),
      OrderedDict([('left', 5), ('right', 7)]),
      OrderedDict([('left', 4), ('right', 7)]),
      OrderedDict([('left', 9), ('right', 2)])]
    Routine practice_2
  LoopTerminator trials_2
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = number.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('left', 1), ('right', 8)]),
      OrderedDict([('left', 5), ('right', 8)]),
      OrderedDict([('left', 7), ('right', 2)]),
      OrderedDict([('left', 8), ('right', 2)]),
      OrderedDict([('left', 9), ('right', 3)]),
      OrderedDict([('left', 3), ('right', 7)]),
      OrderedDict([('left', 5), ('right', 2)]),
      OrderedDict([('left', 6), ('right', 3)]),
      OrderedDict([('left', 7), ('right', 3)]),
      OrderedDict([('left', 9), ('right', 5)]),
      OrderedDict([('left', 2), ('right', 8)]),
      OrderedDict([('left', 3), ('right', 2)]),
      OrderedDict([('left', 5), ('right', 3)]),
      OrderedDict([('left', 7), ('right', 5)]),
      OrderedDict([('left', 1), ('right', 2)]),
      OrderedDict([('left', 2), ('right', 5)]),
      OrderedDict([('left', 8), ('right', 3)]),
      OrderedDict([('left', 6), ('right', 4)]),
      OrderedDict([('left', 3), ('right', 6)]),
      OrderedDict([('left', 5), ('right', 4)]),
      OrderedDict([('left', 5), ('right', 2)]),
      OrderedDict([('left', 0), ('right', 6)]),
      OrderedDict([('left', 5), ('right', 7)]),
      OrderedDict([('left', 4), ('right', 7)]),
      OrderedDict([('left', 2), ('right', 8)]),
      OrderedDict([('left', 6), ('right', 9)]),
      OrderedDict([('left', 7), ('right', 6)]),
      OrderedDict([('left', 6), ('right', 5)]),
      OrderedDict([('left', 9), ('right', 7)]),
      OrderedDict([('left', 9), ('right', 5)]),
      OrderedDict([('left', 2), ('right', 1)]),
      OrderedDict([('left', 1), ('right', 8)]),
      OrderedDict([('left', 4), ('right', 5)]),
      OrderedDict([('left', 5), ('right', 6)]),
      OrderedDict([('left', 7), ('right', 4)]),
      OrderedDict([('left', 5), ('right', 3)]),
      OrderedDict([('left', 4), ('right', 5)])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
    Routine number
  LoopTerminator trials
  Routine over
